CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Choose the whole `tiffs` folder.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<acname>.*)_s(?P<slideid>[0-9]+)_p(?P<panoid>[0-9]+)_r(?P<roiid>[0-9]+)_a(?P<acid>[0-9]+)_ac_.*
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Output Folder|
    Match file and image metadata:[{'Image Metadata': u'acname', 'CSV Metadata': u'AcSession'}, {'Image Metadata': u'acid', 'CSV Metadata': u'AcquisitionID'}]
    Use case insensitive matching?:No
    Metadata file name:acquisition_metadata.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'FullStack': u'acname', u'cellmask': u'acname', u'ProbabStack': u'acname'}, {u'FullStack': u'acid', u'cellmask': u'acid', u'ProbabStack': u'acid'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_full.tiff")
    Name to assign these images:FullStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_mask.tiff")
    Name to assign these images:cellmask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['Resizes the image.']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
    Select the input image:ProbabStack
    Name the output image:ProbSegmentation
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

ConvertImageToObjects:[module_num:6|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notes:['Somehow converting in NamesAndTypes does not work in 3.1.5.', 'Thus I load the image here and then relabel.']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
    Select the input image:cellmask
    Name the output object:cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

Smooth Multichannel:[module_num:7|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notes:['Removes outlier pixels.']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
    Select the input image:FullStack
    Name the output image:FullStackFiltered
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

MeasureObjectNeighbors:[module_num:8|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notes:['Measures the neightbourhood graph.']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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity Multichannel:[module_num:9|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notes:["Measures the object intensities. Each channel will have a number corresponding to the plane number. The metals corresponding to the indices, e.g. _c1, _c2, can be found by looking at the `_full.csv` files in the `tiffs` folder.'", '', "Adapt the number of channels corresponding to the number of planes in the stack. Can be again seen in the  `_full.csv` files in the `tiffs` folder.'"]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
    Hidden:3
    Select an image to measure:FullStackFiltered
    Select an image to measure:FullStack
    Select an image to measure:ProbabStack
    Number of channels:12
    Number of channels:12
    Number of channels:3
    Select objects to measure:cell

MeasureImageIntensity Multichannel:[module_num:10|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notes:["Measures the object intensities. Each channel will have a number corresponding to the plane number. The metals corresponding to the indices, e.g. _c1, _c2, can be found by looking at the `_full.csv` files in the `tiffs` folder.'", '', "Adapt the number of channels as needed! Can be again seen in the  `_full.csv` files in the `tiffs` folder.'"]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
    Select the image to measure:FullStackFiltered
    How many channels does the image have?:12
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:FullStack
    How many channels does the image have?:12
    Measure the intensity only from areas enclosed by objects?:No
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
ConvertObjectsToImage:[module_num:11|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notes:['Save the mask together with the output, e.g. for visualizations.']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
    Select the input objects:cell
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:12|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notes:['Do the mask saving.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:cellmask
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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notes:['Save the data to csv.', "Note that the intensity values are all scaled by a scaling factor corresponding to the bit depth (can be found in the Image.csv 'Scale' column.", 'For uint16 everything is divided by 2**16 = 65535']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:cell|Neighbors_NumberOfNeighbors_8,cell|Intensity_MeanIntensity_FullStackFiltered_c6,cell|Intensity_MeanIntensity_FullStackFiltered_c9,cell|Intensity_MeanIntensity_FullStackFiltered_c8,cell|Intensity_MeanIntensity_FullStackFiltered_c2,cell|Intensity_MeanIntensity_FullStackFiltered_c3,cell|Intensity_MeanIntensity_FullStackFiltered_c12,cell|Intensity_MeanIntensity_FullStackFiltered_c1,cell|Intensity_MeanIntensity_FullStackFiltered_c10,cell|Intensity_MeanIntensity_FullStackFiltered_c7,cell|Intensity_MeanIntensity_FullStackFiltered_c11,cell|Intensity_MeanIntensity_FullStackFiltered_c5,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:14|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notes:['This is necessary to also save the `Object Relationships` table = neightbourhood graph structure.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
